# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Painter Rohde&Schwarz FSV Signal and Spectrum Analyzer

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Painter_RohdeSchwarz_Signal_and_Spectrum_Analyzer

# default interface and address
interface: TCPIP



[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: FSV

# Check instrument model id at startup (True or False). Default is False
check_model: True

# Valid model strings returned by the instrument. Default value = model_str
model_id_1: Rohde&Schwarz,FSV

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 10

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: :INIT:CONT ON;:FORM:BORD NORM;

# Boolean string values (used for sending True/False to instrument), default is 1 and 0
str_true: ON
str_false: OFF

# Final commands sent to the instrument when closing the driver
final: 

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
[Range type]
datatype: COMBO
def_value: Center - Span
combo_def_1: Center - Span
combo_def_2: Start - Stop
permission: NONE
section: Sweep Setup
group: Acquisition

[Start frequency]
datatype: DOUBLE
def_value: 4E9
unit: Hz
set_cmd: FREQ:STAR
state_quant: Range type
state_value_1: Start - Stop
section: Sweep Setup
group: Acquisition

[Stop frequency]
datatype: DOUBLE
def_value: 12E9
unit: Hz
set_cmd: FREQ:STOP
state_quant: Range type
state_value_1: Start - Stop
section: Sweep Setup
group: Acquisition

[Center frequency]
datatype: DOUBLE
def_value: 8E9
unit: Hz
set_cmd: FREQ:CENT
state_quant: Range type
state_value_1: Center - Span
section: Sweep Setup
group: Acquisition

[Span]
datatype: DOUBLE
low_lim: 10
def_value: 10E6
unit: Hz
set_cmd: FREQ:SPAN
state_quant: Range type
state_value_1: Center - Span
section: Sweep Setup
group: Acquisition

[# of points]
datatype: DOUBLE
def_value: 691
low_lim: 101
high_lim: 32001
set_cmd: SWE:POIN
section: Sweep Setup
group: Acquisition

[Detector - Auto]
datatype: BOOLEAN
def_value: True
set_cmd: DET:AUTO
section: Detector
group: Acquisition

[Detector]
datatype: COMBO
def_value: Auto Peak
combo_def_1: Auto Peak
combo_def_2: Negative Peak
combo_def_3: Positive Peak
combo_def_4: RMS
combo_def_5: Average
combo_def_6: Sample
combo_def_7: Quasipeak
cmd_def_1: APE
cmd_def_2: NEG
cmd_def_3: POS
cmd_def_4: SAMP
cmd_def_5: RMS
cmd_def_6: AVER
cmd_def_7: QPE
set_cmd: DET
state_quant: Detector - Auto
state_value_1: False
section: Detector
group: Acquisition

[RBW - Auto]
datatype: BOOLEAN
def_value: True
tooltip: Couples and decouples the resolution bandwidth to the span.
set_cmd: BAND:AUTO
section: Resolution Bandwidth (RBW)
group: Acquisition

[RBW/Span Ratio]
datatype: DOUBLE
def_value: 0.01
low_lim: 0.0001
high_lim: 1
set_cmd: BAND:RAT
tooltip: Ratio between the resolution bandwidth (Hz) and the span (Hz).
state_quant: RBW - Auto
state_value_1: True
section: Resolution Bandwidth (RBW)
group: Acquisition

[RBW]
datatype: DOUBLE
unit: Hz
set_cmd: BAND
state_quant: RBW - Auto
state_value_1: False
section: Resolution Bandwidth (RBW)
group: Acquisition

[RBW Filter Type]
datatype: COMBO
def_value: Gaussian Filters
combo_def_1: Gaussian Filters
combo_def_2: Channel Filters
combo_def_3: RRC Filters
combo_def_4: 5 Pole Filters
cmd_def_1: NORM
cmd_def_2: CFIL
cmd_def_3: RRC
cmd_def_4: P5
set_cmd: BAND:TYPE
section: Resolution Bandwidth (RBW)
group: Acquisition
tooltip: Selects the type of resolution filter.

[VBW - Auto]
datatype: BOOLEAN
def_value: True
set_cmd: BAND:VID:AUTO
tooltip: Couples and decouples the VBW to RBW.
section: Video Bandwidth (VBW)
group: Acquisition

[VBW/RBW Ratio]
datatype: DOUBLE
low_lim: 0.01
high_lim: 1000
def_value: 3
set_cmd: BAND:VID:RAT
tooltip: Ratio between video bandwidth (Hz) and resolution bandwidth (Hz). For measurement of sinusoidal, pulsed, and noise signals recommended values are 1, 10, and 0.1, respectively.
section: Video Bandwidth (VBW)
group: Acquisition
state_quant: VBW - Auto
state_value_1: True

[VBW Filter Position]
datatype: COMBO
def_value: Before Log. Amp.
combo_def_1: Before Log. Amp.
combo_def_2: After Log. Amp.
cmd_def_1: LIN
cmd_def_2: LOG
set_cmd: BAND:VID:TYPE LIN
tooltip: Selects the position of the video filter in the signal path (before/after logarithmic amplifier)
section: Video Bandwidth (VBW)
group: Acquisition

[VBW]
datatype: DOUBLE
unit: Hz
set_cmd: BAND
section: Video Bandwidth (VBW)
group: Acquisition

[Average]
datatype: BOOLEAN
def_value: False
set_cmd: AVER
section: Average
group: Acquisition

[# of averages]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 32767
set_cmd: AVER:COUN
section: Average
group: Acquisition

[Average Type]
datatype: COMBO
def_value: Logarithmic
combo_def_1: Logarithmic
combo_def_2: Linear
combo_def_3: Power
cmd_def_1: VID
cmd_def_2: LIN
cmd_def_3: POW
set_cmd: AVER:TYPE
section: Average
group: Acquisition

[Acquire new trace]
datatype: BOOLEAN
def_value: False
group: Acquisition

[Power]
x_name: Frequency
x_unit: Hz
unit: dBm
datatype: VECTOR
permission: READ

[Marker 1 - Enabled]
label: Enabled
datatype: BOOLEAN
def_value: 0
set_cmd: CALC:MARK1
group: Marker
section: Marker 1

[Marker 1 - X]
label: X
datatype: DOUBLE
unit: Hz
set_cmd: CALC:MARK1:X
group: Marker
section: Marker 1
state_quant: Marker 1 - Enabled
state_value_1: True

[Marker 1 - Y]
label: Y
datatype: DOUBLE
unit: dBm
get_cmd: CALC:MARK1:Y?
permission: READ
group: Marker
section: Marker 1
state_quant: Marker 1 - Enabled
state_value_1: True

[Marker 1 - Function]
label: Function
datatype: COMBO
combo_def_1: None
combo_def_2: Band Power
combo_def_3: Noise Density
group: Marker
section: Marker 1

[Marker 1 - Band Power Mode]
label: Band Power Mode
datatype: COMBO
combo_def_1: Power
combo_def_2: Density
cmd_def_1: POW
cmd_def_2: DENS
set_cmd: CALC:MARK1:FUNC:BPOW:MODE
state_quant: Marker 1 - Function
state_value_1: Band Power
group: Marker
section: Marker 1

[Marker 1 - Band Power Span]
label: Band Power Span
datatype: DOUBLE
unit: Hz
low_lim: 10
set_cmd: CALC:MARK1:FUNC:BPOW:SPAN
state_quant: Marker 1 - Function
state_value_1: Band Power
group: Marker
section: Marker 1

[Marker 1 - Band Power]
label: Band Power
datatype: DOUBLE
unit: dBm
permission: READ
state_quant: Marker 1 - Band Power Mode
state_value_1: Power
group: Marker
section: Marker 1

[Marker 1 - Band Power Density]
label: Band Power
datatype: DOUBLE
unit: dBm/Hz
permission: READ
state_quant: Marker 1 - Band Power Mode
state_value_1: Density
group: Marker
section: Marker 1

[Marker 1 - Noise Density]
label: Noise Density
datatype: DOUBLE
unit: dBm/Hz
get_cmd: CALC:MARK1:NOIS:RES?
tooltip: Noise power density at the marker position
permission: READ
group: Marker
section: Marker 1
state_quant: Marker 1 - Function
state_value_1: Noise Density